PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = headphone_calibration
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisTrialN > 10:
            level_text_colour = 'LightGreen'
        else:
                level_text_colour = 'white'
      End Routine:
        if key_resp.keys == 'c' and level_text_colour == 'LightGreen':
            trials.finished = True


        print(level)
    SoundComponent sound_1
      sound = pure_tone_1000Hz.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      volume [set every frame] = level
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    KeyboardComponent key_resp
      allowedKeys = 'down','up', 'c'
      correctAns = $'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      storeCorrect = True
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    TextComponent question_text
      font = Helvetica
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        'Does your db SPL meter read 60 db SPL?'

        Press 'up' to increase volume or 'down' to decrease volume

        Once the text above turns green and your db SPL meter reads 60 db SPL press 'c'
    TextComponent level_text
      color [set every repeat] = $level_text_colour
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $level
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  Routine start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space
      font = Helvetica
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press space to start
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    TextComponent title_text
      font = Helvetica
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Headphone calibration
  Routine instr
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This experiment has been created to help you calibrate your headphones.

        It is recommended that you do this in a quiet room, preferrably an anechoic chamber if possible.

        It is assumed that your decibel (dB) sound pressure level (SPL) meter is already set up and running.

        There is no assumption made regarding the accuracy of your db SPL meter or your testing environment.

        Press space to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instr2
    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Please make sure you have set the system (e.g. Windows) volume to the level you plan on using with the experiment, and that the head phones are set as the computer’s audio output device. If you’re unsure, exit (Esc-Esc) out of this experiment to check, then come back.

        Press space to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      correctAns = $'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instr3
    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        On the next slide, you will be presented with a value between 0 and 1.

        Your job is to adjust the value until you read exactly 60 on your db SPL meter.

        Press the up arrow to increase the value and the down arrow to decrease the value.
        The value is consistent with volume, such that lower values are quieter and higher values are louder.

        Spend some time doing this and do not settle for any value other than 60 (e.g., if you see 59.9, press up!).

        The jumps in volume will start out big and eventually become small. This allows you to make large changes early on and fine tune the value once you are close to 60.

        After the first 10 changes, the text will turn green, and only then will you be able to continue.

        It is recommended that you wear ear plugs during this process as 60 db SPL is quite loud and may damage your hearing with repeated exposure.

        Press space to start
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      correctAns = $'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine done
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        print(level)
    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        The PsychoPy value that produces
        60 dB SPL on your headphones is:
    TextComponent last_level_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $level
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Please record this exact value

        Press e to end
    KeyboardComponent key_resp_6
      allowedKeys = 'e'
      correctAns = $'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine start
  Routine instr
  Routine instr2
  Routine instr3
  LoopInitiator trials loopType="StairHandler"
    N down = 1
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 1000
    start value = 0.1
    step sizes = [0.3, 0.3, 0.2, 0.2, 0.1, 0.1, 0.05, 0.05, 0.01, 0.005]
    step type = log
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    Routine trial
  LoopTerminator trials
  Routine done
